<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: NDI Aurora tracker"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tracking a single needle.
The computer needs to be on the same local network as Aurora SCU unit. The needle has to be plugged into the first slot"
    />
    <Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="4"
      ToolReferenceFrame="Tracker" >
      <DataSources>
        <DataSource Type="Tool" Id="Lefttool" PortName="0" />
		<DataSource Type="Tool" Id="Righttool" PortName="1" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Lefttool" />
		  <DataSource Id="Righttool" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="LefttoolToTracker" />
		<Transform Name="RighttoolToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
